<?xml version="1.0" encoding="UTF-8"?>
<Configuration>

   <Server port="8080" />

   <Pipeline name="IMPACT_MBC_UMCG">
        <ImportService
            name="Client Directory Import"
            class="org.rsna.ctp.stdstages.DirectoryImportService"
			import="ctpData/MRI2/import"
			root="ctpData/MRI2/roots/directory-import"
            interval="60000"
			quarantine="ctpData/MRI2/quarantines/directory-import" />
        <DicomAnonymizer
            name="Client DICOM Anonymizer"
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
			root="ctpData/MRI2/roots/dicom-anonymizer"
			lookupTable="ctpConfig/MRI2/lookup.properties"
            script="ctpConfig/MRI2/anonymizer.properties"
			quarantine="ctpData/MRI2/quarantines/dicom-anonymizer" />
		<Processor
            name="PatientIdFilter"
            class="org.rsna.ctp.stdstages.DicomFilter"
			root="ctpData/MRI2/roots/dicom-filter"
            script="ctpConfig/MRI2/filter.script"
			quarantine="ctpData/MRI2/quarantines/dicom-filter" />
        <ExportService
            name="HTTP Export Service"
            class="org.rsna.ctp.stdstages.HttpExportService"
			root="ctpData/MRI2/roots/export-service" 
            url="https://ctp.bmia.nl:443"
            acceptDicomObjects="yes"
            acceptXmlObjects="no"
            acceptZipObjects="no"
            acceptFileObjects="no"
            interval="5000" />
   </Pipeline>

</Configuration>
