<Configuration>

   <Server port="8081" />

   <Pipeline name="PIPELINE_NAME">
		<ImportService
			name="DicomImportService"
			id="DicomImportService"
            class="org.rsna.ctp.stdstages.DicomImportService"
			root="ctpData/petboost/copenhagen/roots/dicomImportService"
			port="1104"
			
            logConnections="yes"
            logDuplicates="no"
            suppressDuplicates="no">
		</ImportService>
        <ImportService
            name="Client Directory Import"
            class="org.rsna.ctp.stdstages.DirectoryImportService"
            root="ctpData/petboost/copenhagen/roots/directory-import"
            minAge="60000"
            quarantine="ctpData/petboost/copenhagen/quarantines/directory-import" />
        <DicomAnonymizer
            name="Client DICOM Anonymizer"
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            root="ctpData/petboost/copenhagen/roots/dicom-anonymizer"
            lookupTable="ctpConfig/petboost/copenhagen/lookup.properties"
            script="ctpConfig/petboost/copenhagen/anonymizer.properties"
            quarantine="ctpData/petboost/copenhagen/quarantines/dicom-anonymizer" />
		<Processor
            name="PatientIdFilter"
            class="org.rsna.ctp.stdstages.DicomFilter"
            root="ctpData/petboost/copenhagen/roots/dicom-filter"
            script="ctpConfig/petboost/copenhagen/filter.script"
            quarantine="ctpData/petboost/copenhagen/quarantines/dicom-filter" />
        <!-- <ExportService
            name="HTTP Export Service"
            class="org.rsna.ctp.stdstages.HttpExportService"
            root="ctpData/petboost/copenhagen/roots/export-service" 
            url="http://ctp.bmia.nl:80"
            acceptDicomObjects="yes"
            acceptXmlObjects="yes"
            acceptZipObjects="yes"
            acceptFileObjects="yes"
            interval="5000" /> -->
		<DirectoryStorageService
            name="DirectoryStorageService"
            id="stage ID"
            structure="(0008,0080)/(0010,0020)"
            defaultString="UNKNOWN"
            whitespaceReplacement="_"
            class="org.rsna.ctp.stdstages.DirectoryStorageService"
            root="ctpData/petboost/copenhagen/roots/storage"
            quarantine="ctpData/petboost/copenhagen/quarantines/exportService" />
   </Pipeline>

</Configuration>