<Configuration>
    <Server
        maxThreads="20"
        port="8080"/>
    <Pipeline name="APPROACH_INTERNAL">
        <DicomImportService
            class="org.rsna.ctp.stdstages.DicomImportService"
            logConnections="all"
            name="DicomImportService"
            port="104"
            quarantine="quarantines/DicomImportService"
            root="ctpData/APPROACH/LUMC/roots/dicomImportService"/>
        <DirectoryImportService
            class="org.rsna.ctp.stdstages.DirectoryImportService"
            import="_IMPORT"
            name="Client Directory Import"
            quarantine="ctpData/APPROACH/LUMC/quarantines/directory-import"
            root="ctpData/APPROACH/LUMC/roots/directory-import"/>
        <DicomAnonymizer
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            lookupTable="ctpConfig/APPROACH/LUMC/lookup.properties"
            name="Client DICOM Anonymizer"
            quarantine="ctpData/APPROACH/LUMC/quarantines/dicom-anonymizer"
            root="ctpData/APPROACH/LUMC/roots/dicom-anonymizer"
            script="ctpConfig/APPROACH/LUMC/anonymizer.properties"/>
        <DicomAnonymizer
            name="XnatModifier"
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            root="ctpData/APPROACH/LUMC/roots/dicom-anonymizer-xnat"
            script="ctpConfig/APPROACH/LUMC/anonymizerXnat.properties"
            quarantine="ctpData/APPROACH/LUMC/quarantines/dicom-anonymizer-xnat" />
        <DicomFilter
            class="org.rsna.ctp.stdstages.DicomFilter"
            name="PatientIdFilter"
            quarantine="ctpData/APPROACH/LUMC/quarantines/dicom-filter"
            root="ctpData/APPROACH/LUMC/roots/dicom-filter"
            script="ctpConfig/APPROACH/LUMC/filter.script"/>
        <ExportService
            name="HTTP Export Service"
            class="org.rsna.ctp.stdstages.HttpExportService"
            root="ctpData/APPROACH/LUMC/roots/export-service" 
			quarantine="ctpData/APPROACH/LUMC/quarantines/export-service"
            url="https://ctp.bmia.nl:443"
            interval="5000" /> 
		<!--<DirectoryStorageService
            name="DirectoryStorageService"
            id="stage ID"
            structure="(0010,0020)/(0020,000e)"
            defaultString="UNKNOWN"
            whitespaceReplacement="_"
            class="org.rsna.ctp.stdstages.DirectoryStorageService"
            root="_EXPORT" 
            setStandardExtensions="yes"
            acceptDuplicates="yes"
            returnStoredFile="yes" />-->
    </Pipeline>
	
</Configuration>
