<?xml version="1.0" encoding="UTF-8"?>
<Configuration>

   <Server port="8080" />

   <Pipeline name="IMPACT_MBC_UMCG">
        <ImportService
            name="Client Directory Import"
            class="org.rsna.ctp.stdstages.DirectoryImportService"
			import="ctpData/IMPACT_MBC/UMCG/import"
			root="ctpData/IMPACT_MBC/UMCG/roots/directory-import"
            interval="60000"
			quarantine="ctpData/IMPACT_MBC/UMCG/quarantines/directory-import" />
        <DicomAnonymizer
            name="Client DICOM Anonymizer"
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
			root="ctpData/IMPACT_MBC/UMCG/roots/dicom-anonymizer"
			lookupTable="ctpConfig/IMPACT_MBC/UMCG/lookup.properties"
            script="ctpConfig/IMPACT_MBC/UMCG/anonymizer.properties"
			quarantine="ctpData/IMPACT_MBC/UMCG/quarantines/dicom-anonymizer" />
		<Processor
            name="PatientIdFilter"
            class="org.rsna.ctp.stdstages.DicomFilter"
			root="ctpData/IMPACT_MBC/UMCG/roots/dicom-filter"
            script="ctpConfig/IMPACT_MBC/UMCG/filter.script"
			quarantine="ctpData/IMPACT_MBC/UMCG/quarantines/dicom-filter" />
        <ExportService
            name="HTTP Export Service"
            class="org.rsna.ctp.stdstages.HttpExportService"
			root="ctpData/IMPACT_MBC/UMCG/roots/export-service" 
            url="https://ctp.bmia.nl:443"
            acceptDicomObjects="yes"
            acceptXmlObjects="no"
            acceptZipObjects="no"
            acceptFileObjects="no"
            interval="5000" />
   </Pipeline>

   <Pipeline name="IMPACT_CRC_UMCG">
        <ImportService
            name="Client Directory Import"
            class="org.rsna.ctp.stdstages.DirectoryImportService"
			import="ctpData/IMPACT_CRC/UMCG/import"
			root="ctpData/IMPACT_CRC/UMCG/roots/directory-import"
            interval="60000"
			quarantine="ctpData/IMPACT_CRC/UMCG/quarantines/directory-import" />
        <DicomAnonymizer
            name="Client DICOM Anonymizer"
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
			root="ctpData/IMPACT_CRC/UMCG/roots/dicom-anonymizer"
			lookupTable="ctpConfig/IMPACT_CRC/UMCG/lookup.properties"
            script="ctpConfig/IMPACT_CRC/UMCG/anonymizer.properties"
			quarantine="ctpData/IMPACT_CRC/UMCG/quarantines/dicom-anonymizer" />
		<Processor
            name="PatientIdFilter"
            class="org.rsna.ctp.stdstages.DicomFilter"
			root="ctpData/IMPACT_CRC/UMCG/roots/dicom-filter"
            script="ctpConfig/IMPACT_CRC/UMCG/filter.script"
			quarantine="ctpData/IMPACT_CRC/UMCG/quarantines/dicom-filter" />
        <ExportService
            name="HTTP Export Service"
            class="org.rsna.ctp.stdstages.HttpExportService"
			root="ctpData/IMPACT_CRC/UMCG/roots/export-service" 
            url="https://ctp.bmia.nl:443"
            acceptDicomObjects="yes"
            acceptXmlObjects="no"
            acceptZipObjects="no"
            acceptFileObjects="no"
			interval="5000" />
   </Pipeline>

   <Pipeline name="IMPACT_RCC_UMCG">
        <ImportService
            name="Client Directory Import"
            class="org.rsna.ctp.stdstages.DirectoryImportService"
			root="ctpData/IMPACT_RCC/UMCG/roots/directory-import"
			import="ctpData/IMPACT_RCC/UMCG/import"
            interval="60000"
			quarantine="ctpData/IMPACT_RCC/UMCG/quarantines/directory-import" />
        <DicomAnonymizer
            name="Client DICOM Anonymizer"
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
			root="ctpData/IMPACT_RCC/UMCG/roots/dicom-anonymizer"
			lookupTable="ctpConfig/IMPACT_RCC/UMCG/lookup.properties"
            script="ctpConfig/IMPACT_RCC/UMCG/anonymizer.properties"
			quarantine="ctpData/IMPACT_RCC/UMCG/quarantines/dicom-anonymizer" />
		<Processor
            name="PatientIdFilter"
            class="org.rsna.ctp.stdstages.DicomFilter"
			root="ctpData/IMPACT_RCC/UMCG/roots/dicom-filter"
            script="ctpConfig/IMPACT_RCC/UMCG/filter.script"
			quarantine="ctpData/IMPACT_RCC/UMCG/quarantines/dicom-filter" />
    	<ExportService
            name="HTTP Export Service"
            class="org.rsna.ctp.stdstages.HttpExportService"
			root="ctpData/IMPACT_RCC/UMCG/roots/export-service" 
            url="https://ctp.bmia.nl:443"
            acceptDicomObjects="yes"
            acceptXmlObjects="no"
            acceptZipObjects="no"
            acceptFileObjects="no"
			interval="5000" />
   </Pipeline>

</Configuration>
