<Configuration>
    <Server
        maxThreads="20"
        port="8080"/>
    <Pipeline name="PETRA_IAEA">
        <DicomImportService
            class="org.rsna.ctp.stdstages.DicomImportService"
            logConnections="all"
            name="DicomImportService"
            port="104"
            quarantine="quarantines/DicomImportService"
            root="ctpData/PETRA_IAEA/Semmelweis/roots/dicomImportService"/>
        <DirectoryImportService
            class="org.rsna.ctp.stdstages.DirectoryImportService"
            import="_IMPORT"
            name="Client Directory Import"
            quarantine="ctpData/PETRA_IAEA/Semmelweis/quarantines/directory-import"
            root="ctpData/PETRA_IAEA/Semmelweis/roots/directory-import"/>
        <DicomAnonymizer
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            lookupTable="ctpConfig/PETRA_IAEA/Semmelweis/lookup.properties"
            name="Client DICOM Anonymizer"
            quarantine="ctpData/PETRA_IAEA/Semmelweis/quarantines/dicom-anonymizer"
            root="ctpData/PETRA_IAEA/Semmelweis/roots/dicom-anonymizer"
            script="ctpConfig/PETRA_IAEA/Semmelweis/anonymizer.properties"/>
        <DicomFilter
            class="org.rsna.ctp.stdstages.DicomFilter"
            name="PatientIdFilter"
            quarantine="ctpData/PETRA_IAEA/Semmelweis/quarantines/dicom-filter"
            root="ctpData/PETRA_IAEA/Semmelweis/roots/dicom-filter"
            script="ctpConfig/PETRA_IAEA/Semmelweis/filter.script"/>
        <ExportService
            name="HTTP Export Service"
            class="org.rsna.ctp.stdstages.HttpExportService"
            root="ctpData/PETRA_IAEA/Semmelweis/roots/export-service" 
			quarantine="ctpData/PETRA_IAEA/Semmelweis/quarantines/export-service"
            url="https://ctp.bmia.nl:443"
            interval="5000" />
		<!-- <DirectoryStorageService
            name="DirectoryStorageService"
            id="stage ID"
            structure="(0010,0020)/(0020,000e)"
            defaultString="UNKNOWN"
            whitespaceReplacement="_"
            class="org.rsna.ctp.stdstages.DirectoryStorageService"
            root="ctpData/PETRA_IAEA/Semmelweis/roots/output" 
            setStandardExtensions="yes"
            acceptDuplicates="yes"
            returnStoredFile="yes" /> -->
    </Pipeline>
	
</Configuration>
