<Configuration>
    <Server
        maxThreads="20"
        port="8080"/>
    <Pipeline name="PETRA_PETAL">
        <DicomImportService
            class="org.rsna.ctp.stdstages.DicomImportService"
            logConnections="all"
            name="DicomImportService"
            port="104"
            quarantine="quarantines/DicomImportService"
            root="ctpData/PETRA_PETAL/Essen/roots/dicomImportService"/>
        <DirectoryImportService
            class="org.rsna.ctp.stdstages.DirectoryImportService"
            import="ctpData/PETRA_PETAL/Essen/import"
            name="Client Directory Import"
            quarantine="ctpData/PETRA_PETAL/Essen/quarantines/directory-import"
            root="ctpData/PETRA_PETAL/Essen/roots/directory-import"/>
        <DicomAnonymizer
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            lookupTable="ctpConfig/PETRA_PETAL/Essen/lookup.properties"
            name="Client DICOM Anonymizer"
            quarantine="ctpData/PETRA_PETAL/Essen/quarantines/dicom-anonymizer"
            root="ctpData/PETRA_PETAL/Essen/roots/dicom-anonymizer"
            script="ctpConfig/PETRA_PETAL/Essen/anonymizer.properties"/>
        <DicomFilter
            class="org.rsna.ctp.stdstages.DicomFilter"
            name="PatientIdFilter"
            quarantine="ctpData/PETRA_PETAL/Essen/quarantines/dicom-filter"
            root="ctpData/PETRA_PETAL/Essen/roots/dicom-filter"
            script="ctpConfig/PETRA_PETAL/Essen/filter.script"/>
        <ExportService
            name="HTTP Export Service"
            class="org.rsna.ctp.stdstages.HttpExportService"
            root="ctpData/PETRA_PETAL/Essen/roots/export-service" 
			quarantine="ctpData/PETRA_PETAL/Essen/quarantines/export-service"
            url="https://ctp.bmia.nl:443"
            interval="5000" />
		<!-- <DirectoryStorageService
            name="DirectoryStorageService"
            id="stage ID"
            structure="(0010,0020)/(0020,000e)"
            defaultString="UNKNOWN"
            whitespaceReplacement="_"
            class="org.rsna.ctp.stdstages.DirectoryStorageService"
            root="ctpData/PETRA_PETAL/Essen/roots/output" 
            setStandardExtensions="yes"
            acceptDuplicates="yes"
            returnStoredFile="yes" /> -->
    </Pipeline>
	
</Configuration>
