<Configuration>

   <Server port="80" />

   <Pipeline name="PSMA_ErasmusMC">
		<ImportService
			name="DicomImportService"
			id="DicomImportService"
            class="org.rsna.ctp.stdstages.DicomImportService"
			root="ctpData/PSMA/ErasmusMC/roots/dicomImportService"
			port="104"
			
            logConnections="yes"
            logDuplicates="no"
            suppressDuplicates="no">
						
		</ImportService>
        <ImportService
            name="Client Directory Import"
            class="org.rsna.ctp.stdstages.DirectoryImportService"
            root="ctpData/PSMA/ErasmusMC/roots/directory-import"
			import="ctpData/PSMA/ErasmusMC/import"
            minAge="60000"
            quarantine="ctpData/PSMA/ErasmusMC/quarantines/directory-import" />
        <DicomAnonymizer
            name="Client DICOM Anonymizer"
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            root="ctpData/PSMA/ErasmusMC/roots/dicom-anonymizer"
            lookupTable="ctpConfig/PSMA/ErasmusMC/lookup.properties"
            script="ctpConfig/PSMA/ErasmusMC/anonymizer.properties"
            quarantine="ctpData/PSMA/ErasmusMC/quarantines/dicom-anonymizer" />
		<Processor
            name="PatientIdFilter"
            class="org.rsna.ctp.stdstages.DicomFilter"
            root="ctpData/PSMA/ErasmusMC/roots/dicom-filter"
            script="ctpConfig/PSMA/ErasmusMC/filter.script"
            quarantine="ctpData/PSMA/ErasmusMC/quarantines/dicom-filter" />
		<!-- <DirectoryStorageService
            name="DirectoryStorageService"
            cacheID="cache stage ID"
            structure="(0010,0020)/(0008,0060)_(0020,000e)"
            defaultString="UNKNOWN"
            whitespaceReplacement="_"
            class="org.rsna.ctp.stdstages.DirectoryStorageService"
            root="ctpData/PSMA/ErasmusMC/storage" 
            setStandardExtensions="yes"
            filenameTag=""
            acceptDuplicates="yes"
            returnStoredFile="yes" /> -->
        <ExportService
            name="HTTP Export Service"
            class="org.rsna.ctp.stdstages.HttpExportService"
            root="ctpData/PSMA/ErasmusMC/roots/export-service" 
			quarantine="ctpData/PSMA/ErasmusMC/quarantines/export-service"
            url="https://ctp.bmia.nl:443"
            interval="5000" />
   </Pipeline>

</Configuration>