<Configuration>

   <Server port="8080" />

   <Pipeline name="eDETECT">
		<ImportService
			name="DicomImportService"
			id="DicomImportService"
            class="org.rsna.ctp.stdstages.DicomImportService"
			root="ctpData/eDETECT/amc/roots/dicomImportService"
			port="104"
            logConnections="yes"
            logDuplicates="no"
            suppressDuplicates="no">						
		</ImportService>
        <ImportService
            name="Client Directory Import"
            class="org.rsna.ctp.stdstages.DirectoryImportService"
            root="ctpData/eDETECT/amc/roots/directory-import"
			import="_IMPORT"
            minAge="60000"
            quarantine="ctpData/eDETECT/amc/quarantines/directory-import" />
        <DicomPixelAnonymizer
            class="org.rsna.ctp.stdstages.DicomPixelAnonymizer"
            name="DicomPixelAnonymizer"
            quarantine="ctpData/eDETECT/amc/quarantines/dicom-pixel-anonymizer"
            root="ctpData/eDETECT/amc/roots/dicom-pixel-anonymizer"
            script="ctpConfig/eDETECT/amc/dicom-pixel-anonymizer.script"/>
        <DicomAnonymizer
            name="Client DICOM Anonymizer"
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            root="ctpData/eDETECT/amc/roots/dicom-anonymizer"
            lookupTable="ctpConfig/eDETECT/amc/lookup.properties"
            script="ctpConfig/eDETECT/amc/anonymizer.properties"
            quarantine="ctpData/eDETECT/amc/quarantines/dicom-anonymizer" />
		<Processor
            name="PatientIdFilter"
            class="org.rsna.ctp.stdstages.DicomFilter"
            root="ctpData/eDETECT/amc/roots/dicom-filter"
            script="ctpConfig/eDETECT/amc/filter.script"
            quarantine="ctpData/eDETECT/amc/quarantines/dicom-filter" />
        <ExportService
            name="HTTP Export Service"
            class="org.rsna.ctp.stdstages.HttpExportService"
            root="ctpData/eDETECT/amc/roots/export-service" 
            url="https://ctp.bmia.nl:443"
            acceptDicomObjects="yes"
            acceptXmlObjects="yes"
            acceptZipObjects="yes"
            acceptFileObjects="yes"
            interval="5000" />
		<!-- <DirectoryStorageService
            name="DirectoryStorageService"
            id="stage ID"
            structure="(0010,0010)/(0008,103e)/(0008,0060)_"
            defaultString="UNKNOWN"
            whitespaceReplacement="_"
            class="org.rsna.ctp.stdstages.DirectoryStorageService"
            root="ctpData/eDETECT/amc/roots/storage" 
            setStandardExtensions="yes"
            acceptDuplicates="yes"
            returnStoredFile="yes"
            quarantine="ctpData/eDETECT/amc/quarantines/storage" /> -->
   </Pipeline>

</Configuration>
