<Configuration>
    <Server
        maxThreads="20"
        port="80"/>
    <Pipeline name="APPROACH_DMZ">
        <DicomImportService
            class="org.rsna.ctp.stdstages.DicomImportService"
            logConnections="all"
            name="DicomImportService"
            port="50104"
            quarantine="quarantines/DicomImportService"
            root="ctpData/APPROACH/OSLO/roots/dicomImportService"/>
        <DirectoryImportService
            class="org.rsna.ctp.stdstages.DirectoryImportService"
            import="ctpData/APPROACH/OSLO/import"
            name="Client Directory Import"
            quarantine="ctpData/APPROACH/OSLO/quarantines/directory-import"
            root="ctpData/APPROACH/OSLO/roots/directory-import"/>
        <!-- <HttpExportService
            class="org.rsna.ctp.stdstages.HttpExportService"
            name="HTTP Export Service"
            quarantine="ctpData/APPROACH/OSLO/quarantines/export-service"
            root="ctpData/APPROACH/OSLO/roots/export-service"
            sendDigestHeader="no"
            url="https://ctp.bmia.nl:443"/> -->
    </Pipeline>
</Configuration>
