<Configuration>
    <Server
        maxThreads="20"
        port="8080"/>
    <Pipeline name="COVID19_MUMC">
        <DicomImportService
            class="org.rsna.ctp.stdstages.DicomImportService"
            logConnections="all"
            name="DicomImportService"
            port="104"
            quarantine="quarantines/DicomImportService"
            root="ctpData/COVID19/MUMC/roots/dicomImportService"/>
        <DirectoryImportService
            class="org.rsna.ctp.stdstages.DirectoryImportService"
            import="ctpData/COVID19/MUMC/import"
            name="Client Directory Import"
            quarantine="ctpData/COVID19/MUMC/quarantines/directory-import"
            root="ctpData/COVID19/MUMC/roots/directory-import"/>
        <DicomAnonymizer
            name="Client DICOM Anonymizer"
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            root="ctpData/COVID19/MUMC/roots/dicom-anonymizer"
            lookupTable="ctpConfig/COVID19/MUMC/lookup.properties"
            script="ctpConfig/COVID19/MUMC/anonymizer.properties"
            quarantine="ctpData/COVID19/MUMC/quarantines/dicom-anonymizer" />
		<Processor
            name="PatientIdFilter"
            class="org.rsna.ctp.stdstages.DicomFilter"
            root="ctpData/COVID19/MUMC/roots/dicom-filter"
            script="ctpConfig/COVID19/MUMC/filter.script"
            quarantine="ctpData/COVID19/MUMC/quarantines/dicom-filter" />
		<DirectoryStorageService
            acceptDuplicates="yes"
            class="org.rsna.ctp.stdstages.DirectoryStorageService"
            logDuplicates="no"
            name="DirectoryStorageService"
            quarantine="ctpData/COVID19/MUMC/quarantines/DirectoryStorageService"
            root="ctpData/COVID19/MUMC/roots/storage"
            setStandardExtensions="yes"
            structure="(0010,0020)/(0008,1030)/(0008,103E)/(0008,0060)"
            whitespaceReplacement="_"/>
        <HttpExportService
            class="org.rsna.ctp.stdstages.HttpExportService"
            name="HTTP Export Service"
            quarantine="ctpData/COVID19/MUMC/quarantines/export-service"
            root="ctpData/COVID19/MUMC/roots/export-service"
            sendDigestHeader="yes"
            url="https://ctp.bmia.nl:443"/>
		
    </Pipeline>
</Configuration>	
