<Configuration>
    <Server
        maxThreads="20"
        port="8080"/>
    <Pipeline name="GLASS_NL_ERASM">
        <DicomImportService
            class="org.rsna.ctp.stdstages.DicomImportService"
            logConnections="all"
            name="DicomImportService"
            port="104"
            quarantine="quarantines/DicomImportService"
            root="ctpData/GLASS_NL_ERASM/ERASMUS/roots/dicomImportService"/>
        <DirectoryImportService
            class="org.rsna.ctp.stdstages.DirectoryImportService"
            import="_IMPORT"
            name="Client Directory Import"
            quarantine="ctpData/GLASS_NL_ERASM/ERASMUS/quarantines/directory-import"
            root="ctpData/GLASS_NL_ERASM/ERASMUS/roots/directory-import"/>
        <DicomAnonymizer
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            lookupTable="ctpConfig/GLASS_NL_ERASM/ERASMUS/lookup.properties"
            name="Client DICOM Anonymizer"
            quarantine="ctpData/GLASS_NL_ERASM/ERASMUS/quarantines/dicom-anonymizer"
            root="ctpData/GLASS_NL_ERASM/ERASMUS/roots/dicom-anonymizer"
            script="ctpConfig/GLASS_NL_ERASM/ERASMUS/anonymizer.properties"/>
        <DicomAnonymizer
            name="XnatModifier"
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            root="ctpData/GLASS_NL_ERASM/ERASMUS/roots/dicom-anonymizer-xnat"
            script="ctpConfig/GLASS_NL_ERASM/ERASMUS/anonymizerXnat.properties"
            quarantine="ctpData/GLASS_NL_ERASM/ERASMUS/quarantines/dicom-anonymizer-xnat" />
        <DicomFilter
            class="org.rsna.ctp.stdstages.DicomFilter"
            name="PatientIdFilter"
            quarantine="ctpData/GLASS_NL_ERASM/ERASMUS/quarantines/dicom-filter"
            root="ctpData/GLASS_NL_ERASM/ERASMUS/roots/dicom-filter"
            script="ctpConfig/GLASS_NL_ERASM/ERASMUS/filter.script"/>
        <ExportService
            name="HTTP Export Service"
            class="org.rsna.ctp.stdstages.HttpExportService"
            root="ctpData/GLASS_NL_ERASM/ERASMUS/roots/export-service" 
			quarantine="ctpData/GLASS_NL_ERASM/ERASMUS/quarantines/export-service"
            url="https://ctp.bmia.nl:443"
            interval="5000" />
    </Pipeline>
	
</Configuration>
