<Configuration>
    <Server
        maxThreads="20"
        port="80"/>
    <Pipeline name="HOVON_NCRI_STTHOMAS">
        <DicomImportService
            class="org.rsna.ctp.stdstages.DicomImportService"
            logConnections="all"
            name="DicomImportService"
            port="1104"
            quarantine="quarantines/DicomImportService"
            root="ctpData/HOVON_NCRI/StThomas/roots/dicomImportService"/>
        <DirectoryImportService
            class="org.rsna.ctp.stdstages.DirectoryImportService"
            import="ctpData/HOVON_NCRI/StThomas/import"
            name="Client Directory Import"
            quarantine="ctpData/HOVON_NCRI/StThomas/quarantines/directory-import"
            root="ctpData/HOVON_NCRI/StThomas/roots/directory-import"/>
        <DicomAnonymizer
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            lookupTable="ctpConfig/HOVON_NCRI/StThomas/lookup.properties"
            name="Client DICOM Anonymizer"
            quarantine="ctpData/HOVON_NCRI/StThomas/quarantines/dicom-anonymizer"
            root="ctpData/HOVON_NCRI/StThomas/roots/dicom-anonymizer"
            script="ctpConfig/HOVON_NCRI/StThomas/anonymizer.properties"/>
        <DicomFilter
            class="org.rsna.ctp.stdstages.DicomFilter"
            name="PatientIdFilter"
            quarantine="ctpData/HOVON_NCRI/StThomas/quarantines/dicom-filter"
            root="ctpData/HOVON_NCRI/StThomas/roots/dicom-filter"
            script="ctpConfig/HOVON_NCRI/StThomas/filter.script"/>
        <ExportService
            name="HTTP Export Service"
            class="org.rsna.ctp.stdstages.HttpExportService"
            root="ctpData/HOVON_NCRI/StThomas/roots/export-service" 
			quarantine="ctpData/HOVON_NCRI/StThomas/quarantines/export-service"
            url="https://ctp.bmia.nl:443"
            interval="5000" />
    </Pipeline>
	
</Configuration>
