<Configuration>
    <Server
        maxThreads="20"
        port="8080"/>
    <Pipeline name="ParelAAA">
        <DicomImportService
            class="org.rsna.ctp.stdstages.DicomImportService"
            logConnections="all"
            name="DicomImportService"
            port="104"
            quarantine="quarantines/DicomImportService"
            root="ctpData/ParelAAA/AMC/roots/dicomImportService"/>
        <DirectoryImportService
            class="org.rsna.ctp.stdstages.DirectoryImportService"
            import="_IMPORT"
            name="Client Directory Import"
            quarantine="ctpData/ParelAAA/AMC/quarantines/directory-import"
            root="ctpData/ParelAAA/AMC/roots/directory-import"/>
        <DicomAnonymizer
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            lookupTable="ctpConfig/ParelAAA/AMC/lookup.properties"
            name="Client DICOM Anonymizer"
            quarantine="ctpData/ParelAAA/AMC/quarantines/dicom-anonymizer"
            root="ctpData/ParelAAA/AMC/roots/dicom-anonymizer"
            script="ctpConfig/ParelAAA/AMC/anonymizer.properties"/>
        <DicomAnonymizer
            name="XnatModifier"
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            root="ctpData/ParelAAA/AMC/roots/dicom-anonymizer-xnat"
            script="ctpConfig/ParelAAA/AMC/anonymizerXnat.properties"
            quarantine="ctpData/ParelAAA/AMC/quarantines/dicom-anonymizer-xnat" />
        <DicomFilter
            class="org.rsna.ctp.stdstages.DicomFilter"
            name="PatientIdFilter"
            quarantine="ctpData/ParelAAA/AMC/quarantines/dicom-filter"
            root="ctpData/ParelAAA/AMC/roots/dicom-filter"
            script="ctpConfig/ParelAAA/AMC/filter.script"/>
        <ExportService
            name="HTTP Export Service"
            class="org.rsna.ctp.stdstages.HttpExportService"
            root="ctpData/ParelAAA/AMC/roots/export-service" 
			quarantine="ctpData/ParelAAA/AMC/quarantines/export-service"
            url="https://ctp.bmia.nl:443"
            interval="5000" />
		<!-- <DirectoryStorageService
            name="DirectoryStorageService"
            id="stage ID"
            structure="(0010,0020)/(0020,000e)"
            defaultString="UNKNOWN"
            whitespaceReplacement="_"
            class="org.rsna.ctp.stdstages.DirectoryStorageService"
            root="ctpData/ParelAAA/AMC/roots/output" 
            setStandardExtensions="yes"
            acceptDuplicates="yes"
            returnStoredFile="yes" /> -->
    </Pipeline>
	
</Configuration>
