<Configuration>
    <Server
        maxThreads="20"
        port="8080"/>
    <Pipeline name="ParelAAA">
        <DicomImportService
            class="org.rsna.ctp.stdstages.DicomImportService"
            logConnections="all"
            name="DicomImportService"
            port="104"
            quarantine="quarantines/DicomImportService"
            root="ctpData/ParelAAA/LUMC/roots/dicomImportService"/>
        <DirectoryImportService
            class="org.rsna.ctp.stdstages.DirectoryImportService"
            import="_IMPORT"
            name="Client Directory Import"
            quarantine="ctpData/ParelAAA/LUMC/quarantines/directory-import"
            root="ctpData/ParelAAA/LUMC/roots/directory-import"/>
        <DicomAnonymizer
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            lookupTable="ctpConfig/ParelAAA/LUMC/lookup.properties"
            name="Client DICOM Anonymizer"
            quarantine="ctpData/ParelAAA/LUMC/quarantines/dicom-anonymizer"
            root="ctpData/ParelAAA/LUMC/roots/dicom-anonymizer"
            script="ctpConfig/ParelAAA/LUMC/anonymizer.properties"/>
        <DicomAnonymizer
            name="XnatModifier"
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            root="ctpData/ParelAAA/LUMC/roots/dicom-anonymizer-xnat"
            script="ctpConfig/ParelAAA/LUMC/anonymizerXnat.properties"
            quarantine="ctpData/ParelAAA/LUMC/quarantines/dicom-anonymizer-xnat" />
        <DicomFilter
            class="org.rsna.ctp.stdstages.DicomFilter"
            name="PatientIdFilter"
            quarantine="ctpData/ParelAAA/LUMC/quarantines/dicom-filter"
            root="ctpData/ParelAAA/LUMC/roots/dicom-filter"
            script="ctpConfig/ParelAAA/LUMC/filter.script"/>
        <ExportService
            name="HTTP Export Service"
            class="org.rsna.ctp.stdstages.HttpExportService"
            root="ctpData/ParelAAA/LUMC/roots/export-service" 
			quarantine="ctpData/ParelAAA/LUMC/quarantines/export-service"
            url="https://ctp.bmia.nl:443"
            interval="5000" />
		<!-- <DirectoryStorageService
            name="DirectoryStorageService"
            id="stage ID"
            structure="(0010,0020)/(0020,000e)"
            defaultString="UNKNOWN"
            whitespaceReplacement="_"
            class="org.rsna.ctp.stdstages.DirectoryStorageService"
            root="ctpData/ParelAAA/LUMC/roots/output" 
            setStandardExtensions="yes"
            acceptDuplicates="yes"
            returnStoredFile="yes" /> -->
    </Pipeline>
	
</Configuration>
