<Configuration>

   <Server port="80" />

   <Pipeline name="MR_CLEAN_AMC">
		<ImportService
			name="DicomImportService"
			id="DicomImportService"
            class="org.rsna.ctp.stdstages.DicomImportService"
			root="ctpData/MR_CLEAN/AMC/roots/dicomImportService"
			port="104"
			
            logConnections="yes"
            logDuplicates="no"
            suppressDuplicates="no">
						
		</ImportService>
        <ImportService
            name="Client Directory Import"
            class="org.rsna.ctp.stdstages.DirectoryImportService"
            root="ctpData/MR_CLEAN/AMC/roots/directory-import"
			import="ctpData/MR_CLEAN/AMC/import"
            minAge="60000"
            quarantine="ctpData/MR_CLEAN/AMC/quarantines/directory-import" />
        <DicomAnonymizer
            name="Client DICOM Anonymizer"
            class="org.rsna.ctp.stdstages.DicomAnonymizer"
            root="ctpData/MR_CLEAN/AMC/roots/dicom-anonymizer"
            lookupTable="ctpConfig/MR_CLEAN/AMC/lookup.properties"
            script="ctpConfig/MR_CLEAN/AMC/anonymizer.properties"
            quarantine="ctpData/MR_CLEAN/AMC/quarantines/dicom-anonymizer" />
		<Processor
            name="Filter1"
            class="org.rsna.ctp.stdstages.DicomFilter"
            root="ctpData/MR_CLEAN/AMC/roots/dicom-filter"
            script="ctpConfig/MR_CLEAN/AMC/filter.script"
            quarantine="ctpData/MR_CLEAN/AMC/quarantines/dicom-filter" />
		<Processor
            name="Filter2"
            class="org.rsna.ctp.stdstages.DicomFilter"
            root="ctpData/MR_CLEAN/AMC/roots/dicom-filter"
            script="ctpConfig/MR_CLEAN/AMC/filter2.script"
            quarantine="ctpData/MR_CLEAN/AMC/quarantines/dicom-filter" />
		<!-- <DirectoryStorageService
            name="DirectoryStorageService"
            cacheID="cache stage ID"
            structure="(0010,0020)/(0008,0060)_(0020,000e)"
            defaultString="UNKNOWN"
            whitespaceReplacement="_"
            class="org.rsna.ctp.stdstages.DirectoryStorageService"
            root="ctpData/MR_CLEAN/AMC/storage" 
            setStandardExtensions="yes"
            filenameTag=""
            acceptDuplicates="yes"
            returnStoredFile="yes" /> -->
        <ExportService
            name="HTTP Export Service"
            class="org.rsna.ctp.stdstages.HttpExportService"
            root="ctpData/MR_CLEAN/AMC/roots/export-service" 
			quarantine="ctpData/MR_CLEAN/AMC/quarantines/export-service"
            url="https://ctp.bmia.nl:443"
            interval="5000" />
   </Pipeline>

</Configuration>